PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = pilot_study
  exportHTML = on Save
  keyboardBackend = PsychToolbox
  measureFrameRate = False
  runMode = 1
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Routines
  Routine WelcomeScreen
    RoutineSettingsComponent WelcomeScreen
      saveStartStop = False
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    TextComponent welcome_message
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Hello, Welcome the Image Matching study conducted by the VIDAR lab.

        Press 'SPACE' to continue.
    KeyboardComponent next_key
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine consent
    RoutineSettingsComponent consent
      saveStartStop = False
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    TextComponent ask_consent
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Now that you understand what will be expected from you as well as what data will be collected, do you consent? (y/n)
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    KeyboardComponent consent_key
      allowedKeys = 'y','n'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    CodeComponent code
      Code Type = Both
      Each Frame:
        if(consent_key.keys == 'n' or consent_key.keys == str('n')):
            return quit
      Each JS Frame:
        //check if unconsented
        if (consent_key.keys === 'n' || consent_key.keys === String('n')) {
            quitPsychoJS('Unconsented through pressing the [n] key. Goodbye!', false);
        }
  Routine EndScreen
    RoutineSettingsComponent EndScreen
      saveStartStop = False
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    TextComponent end_message
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Thank you for completing!

        Please wait while we save your results...
    CodeComponent DataPipe_Link
      Code Type = JS
      Begin JS Routine:
        // Prevent default browser CSV download
        //psychoJS._saveResults = 0;

        // Generate filename for results
        let filename = psychoJS._experiment._experimentName + '_' + psychoJS._experiment._datetime + '.csv';

        // Extract data object from experiment
        let dataObj = psychoJS._experiment._trialsData;

        // Convert data object to CSV
        let data = [Object.keys(dataObj[0])].concat(dataObj).map(it => {
            return Object.values(it).toString()
        }).join('\n')

        // Send data to OSF via DataPipe
        console.log('Saving data...')
        fetch('https://pipe.jspsych.org/api/data', {
            method: 'POST',
            headers: {
                'Content-Type': 'application/json',
                Accept: '*/*',
            },
            body: JSON.stringify({
                experimentID: 'DLFoEuJu8PX1',
                filename: filename,
                data: data,
            }),
        }).then(response => response.json()).then(data => {
            // Log response and force experiment end
            console.log(data);
            quitPsychoJS();
        })
  Routine blank500
    RoutineSettingsComponent blank500
      saveStartStop = False
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    TextComponent text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine med_sets
    RoutineSettingsComponent med_sets
      saveStartStop = False
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    ImageComponent image
      image [set every repeat] = $set_img
      saveStartStop = False
      size = (1.8, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = '1','2','3','4','5', '6'
      correctAns = $correct
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine task
    RoutineSettingsComponent task
      saveStartStop = False
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    TextComponent text_2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        On the following page, you will be given a query image of a hotel room.

        Your task is to use keys '1', '2', '3', '4', '5', or '6' to select the corresponding image that pictures the same hotel room.

        Press 'SPACE' to begin.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine imp_sets
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    ImageComponent image2
      image [set every repeat] = $set_img2
      saveStartStop = False
      size = (1.8, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp2
      allowedKeys = '1','2','3','4','5', '6'
      correctAns = $correct2
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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Flow
  Routine WelcomeScreen
  Routine consent
  Routine task
  LoopInitiator trialsMed loopType="TrialHandler"
    conditionsFile = resources/loopTest.csv
    loopType = fullRandom
    nReps = 1
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    conditions:
      [OrderedDict([('set_img', 'resources/images/m1.jpg'), ('correct', np.int64(3))]),
      OrderedDict([('set_img', 'resources/images/m2.jpg'), ('correct', np.int64(1))]),
      OrderedDict([('set_img', 'resources/images/m3.jpg'), ('correct', np.int64(3))]),
      OrderedDict([('set_img', 'resources/images/m4.jpg'), ('correct', np.int64(6))]),
      OrderedDict([('set_img', 'resources/images/m5.jpg'), ('correct', np.int64(4))])]
    Routine med_sets
    Routine blank500
  LoopTerminator trialsMed
  LoopInitiator trialsImp loopType="TrialHandler"
    conditionsFile = resources/impTest.csv
    loopType = fullRandom
    nReps = 1
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    conditions:
      [OrderedDict([('set_img2', 'resources/images/i1.jpg'), ('correct2', None)]),
      OrderedDict([('set_img2', 'resources/images/i2.jpg'), ('correct2', None)]),
      OrderedDict([('set_img2', 'resources/images/i3.jpg'), ('correct2', None)]),
      OrderedDict([('set_img2', 'resources/images/i4.jpg'), ('correct2', None)]),
      OrderedDict([('set_img2', 'resources/images/i5.jpg'), ('correct2', None)])]
    Routine imp_sets
    Routine blank500
  LoopTerminator trialsImp
  Routine EndScreen
